<CompuCell3D Revision="20180722" Version="3.7.8">
   
   <Potts>
      <Dimensions x="300" y="300" z="1"/>
      <Steps>2001</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
  <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Medium2" Freeze=""/>
      <CellType TypeId="2" TypeName="Vegetativas"/>
   </Plugin>
  
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Vegetativas" LambdaVolume="5.0" TargetVolume="12.0"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
   </Plugin>
   
   <Plugin Name="NeighborTracker"/>
   
   <Plugin Name="LengthConstraint">
      <LengthEnergyParameters CellType="Vegetativas" TargetLength="12" LambdaLength="30"/>
   </Plugin>
   <Plugin Name="ConnectivityGlobal">
      <Penalty Type="Vegetativas">100000000000</Penalty>
   </Plugin>
   
   <CellMotility>
      <MotilityParameters CellType="Vegetativas" Motility="20"/>
   </CellMotility>
   
   
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="Slime" Source="FlexibleDiffusionSolverFE">
         <ChemotaxisByType ChemotactTowards="Vegetativas" Lambda="10.0" Type="Vegetativas"/>
      </ChemicalField>
   </Plugin>
   
   <Plugin Name="Secretion">
      <Field Name="Slime">
         <SecretionOnContact SecreteOnContactWith="Medium" Type="Vegetativas">0.9</SecretionOnContact>
      </Field>
   </Plugin>
   <Steppable Type="FlexibleDiffusionSolverFE">
      <DiffusionField Name="Slime">
         <DiffusionData>
            <FieldName>Slime</FieldName>
            <DiffusionConstant>0.0</DiffusionConstant>
            <DecayConstant>0.006</DecayConstant>
            <DoNotDiffuseTo>Medium2</DoNotDiffuseTo>
         </DiffusionData>
      </DiffusionField>
   </Steppable>
   
   
    <Plugin Name="Curvature">
        <InternalParameters Type1="Vegetativas" Type2="Vegetativas">
        <Lambda>1000000.0</Lambda>
        <ActivationEnergy>-50.0</ActivationEnergy>
   </InternalParameters>
    <InternalTypeSpecificParameters>
        <Parameters TypeName="Vegetativas" MaxNumberOfJunctions="2" NeighborOrder="1"/>
    </InternalTypeSpecificParameters>
    </Plugin>
   
    <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="Medium2">0.0</Energy>
      <Energy Type1="Medium" Type2="Vegetativas">10.0</Energy>
      <Energy Type1="Medium2" Type2="Medium2">0.0</Energy>
      <Energy Type1="Medium2" Type2="Vegetativas">10.0</Energy>
      <Energy Type1="Vegetativas" Type2="Vegetativas">3.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin> 
   
<!--    <Steppable Type="PIFInitializer"> -->
<!--      <PIFName>Simulation/46x16.piff</PIFName> -->
<!--   </Steppable> -->
  
</CompuCell3D>